CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:35
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag and drop your images here.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^r(?P<WellRow>\d{2})c(?P<WellColumn>\d{2})f(?P<Site>\d{2})p\d{2}-ch(?P<ChannelNumber>\d)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assign a meaningful name to each image by which other modules will refer to it.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:SMI312
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei via Hoechst staining. Adjust the typical diameter of objects according to your images. You can measure it when you have an image open via the measure tool.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.3488
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:6|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notes:['Threshold the MAP2 to mask the nuclei (the module MaskObject needs a binary image).', "Ideally, we only have neuronal nuclei in the culture, but let's be honest, that's usually not the case. Therefore, I want to make a subset of the previously identified nuclei which I am sure are neuronal. This will be done by masking the nuclei with the MAP2 staining, as this also stains the soma/nuclei of neurons (at least when they're a bit younger; you might want to confirm this beforehand)."]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
    Select the input image:MAP2
    Name the output image:BinaryMAP2
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,0.5
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:7|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notes:['Mask the nuclei with the MAP2 binary images to keep only nuclei that are MAP2 positiv (=neurons).', "You might want to change the setting of 'Handling of objects that are partially masked' depending on how strong the MAP2 signal is. If you keep a lot of nuclei you don't believe to be really MAP2 positive, change it to 'Remove depending on overlap' and determine the best value empirically."]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
    Select objects to be masked:Nucleus
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:BinaryMAP2
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.25
    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:8|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notes:['Expand nuclei to get "soma".', '', 'Later on, we want to substract the soma from the identified cellular structure. For this, we just assume that the soma has the same shape as the nuclei and make the nuclei bigger by a certain number of pixels. These number needs to be determined empirically.']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
    Select the input objects:MaskedNuclei
    Name the output objects:Expanded_nuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:12
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
EnhanceOrSuppressFeatures:[module_num:9|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notes:['Enhance the MAP2 signal.', 'Sometimes this helps to enhance the signal in the finer neurite structures, but not always. If you have nice images this is not needed and should be deselected (this saves time).']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
    Select the input image:MAP2
    Name the output image:MAP2_enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:No

IdentifySecondaryObjects:[module_num:10|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notes:['Identify dendrites (+cell body) by using the MAP2 image around the already identified nuclei.', '', "Change the input image to 'MAP2_enhanced' if you have enabled the previous module. Change the 'Threshold smooting scale' if the outline of the identified structures is all edgy and gives a wiggly line when it should be more or less straight. This will affect the sceletonization of the neurites later on."]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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:Dendrites_with_Nuclei
    Select the method to identify the secondary objects:Propagation
    Select the input image:MAP2_enhanced
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.3488
    Lower and upper bounds on threshold:0.0001,0.01
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:11|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notes:['MAP2 stains the cell body next to the neurites. By removing the soma/expanded nuclei only the neurites will remain.']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
    Select the larger identified objects:Dendrites_with_Nuclei
    Select the smaller identified objects:Expanded_nuclei
    Name the tertiary objects to be identified:Dendrites
    Shrink smaller object prior to subtraction?:No

SplitOrMergeObjects:[module_num:12|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notes:['After removing the nuclei, some objects are not continuous anymore; this will split them into seperate objects. Otherwise the measurement modules will not measure these objects.']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
    Select the input objects:Dendrites
    Name the new objects:DendritesSingle
    Operation:Split
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
EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:SMI312
    Name the output image:SMI_enhanced
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

Closing:[module_num:14|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notes:['This closes small holes in the enhanced SMI312 signal (due to differing intensities along the neurite). The holes would hinder proper detection of the neurites in the next module.']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
    Select the input image:SMI_enhanced
    Name the output image:SMI_closed
    Structuring element:disk,3

IdentifySecondaryObjects:[module_num:15|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notes:['Identify axons (+cell body) by using the SMI312 image around the already identified nuclei.', "Change the 'Threshold smooting scale' if the outline of the identified structures is all edgy and gives a wiggly line when it should be more or less straight. This will affect the sceletonization of the neurits later on."]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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:Axons_with_Nuclei
    Select the method to identify the secondary objects:Propagation
    Select the input image:SMI_closed
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.3488
    Lower and upper bounds on threshold:0.0001,0.1
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    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

IdentifyTertiaryObjects:[module_num:16|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notes:['SMI312 stains the cell body next to the neurites. By removing the soma/expanded nuclei only the neurites will remain.']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
    Select the larger identified objects:Axons_with_Nuclei
    Select the smaller identified objects:Expanded_nuclei
    Name the tertiary objects to be identified:Axons
    Shrink smaller object prior to subtraction?:No

SplitOrMergeObjects:[module_num:17|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notes:['After removing the nuclei, some objects are not continuous anymore; this will split them into seperate objects. Otherwise the measurement modules will not measure these objects.']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
    Select the input objects:Axons
    Name the new objects:AxonsSingle
    Operation:Split
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
MeasureObjectSizeShape:[module_num:18|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notes:['Measure the size and shape of the neurites; this is mainly to filter out any dots/speckles which are likely not actual neurites.']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
    Select object sets to measure:AxonsSingle, DendritesSingle
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:19|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notes:['Remove the objects that are too small, to get rid of dots/speckles.', '', "You can change which measurement you're basing the filter on depending on what gives you the best results and you can combine several measurements. When in test mode, you can open 'View Workspace' and have the measurements depicted over the objects to identify the values."]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
    Select the objects to filter:DendritesSingle
    Name the output objects:DendritesFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MedianRadius
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:5

FilterObjects:[module_num:20|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notes:['Remove the objects that are too small, to get rid of dots/speckles.', '', "You can change which measurement you're basing the filter on depending on what gives you the best results."]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
    Select the objects to filter:AxonsSingle
    Name the output objects:AxonsFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_MajorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:30
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:21|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notes:['Expand the (already) expanded nuclei a bit further so I can relate them to the dendrites and axons., as this requires a bit of an overlap.']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
    Select the input objects:Expanded_nuclei
    Name the output objects:Expanded_nuclei_plus
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
RelateObjects:[module_num:22|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notes:['Relate the nuclei with the filtered dendrites (assigns a parent-child relationship between these objects). Because of the filtering etc. before, the objects dont belong to a nucleus anymore. But because for example the MeasureObjectSkeleton starts from the nucleus this is useful. Furthermore we can determine how many dendrites belong to one nucleus.']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
    Parent objects:Expanded_nuclei_plus
    Child objects:DendritesFiltered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:23|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notes:['Relate the nuclei with the filtered axons (assigns a parent-child relationship between these objects). Because of the filtering', ' etc. before', ' the objects dont belong to a nucleus anymore. But because for example the MeasureObjectSkeleton starts from the nucleus this is useful. Furthermore', ' we can determine how many axons belong to one nucleus.']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
    Parent objects:Expanded_nuclei_plus
    Child objects:AxonsFiltered
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:24|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notes:['Filter the related nuclei and keep only the ones that have dendrites as children. This means that I have a number of neurons which have dendrites that I have identified as actual dendrites (the DendritesFiltered).']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
    Select the objects to filter:Expanded_nuclei_plus
    Name the output objects:NucleiDendrites
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_DendritesFiltered_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:25|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notes:['Filter the expanded nuclei and keep only the ones that have axons as children. This means that I have a number of neurons which have axons that I have identified as actual axons (the AxonsFiltered).']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
    Select the objects to filter:Expanded_nuclei_plus
    Name the output objects:NucleiAxons
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_AxonsFiltered_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ExpandOrShrinkObjects:[module_num:26|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notes:['Skeletonize the dendrites.']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
    Select the input objects:DendritesFiltered
    Name the output objects:DendritesSkeleton
    Select the operation:Skeletonize each object
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
ExpandOrShrinkObjects:[module_num:27|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notes:["Remove small protrusions which would be later recognized as branch points although they're not. The number of pixels by which to shrink needs to be determined empirically."]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
    Select the input objects:DendritesSkeleton
    Name the output objects:DendritesSkeletonClean
    Select the operation:Remove spurs
    Number of pixels by which to expand or shrink:5
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
ConvertObjectsToImage:[module_num:28|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notes:['The next modules are necessary so that the individual object identities (from the dendrites) are used for measuring the skeleton attributes.', 'The identified dendrites are converted to an image.']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
    Select the input objects:DendritesSkeletonClean
    Name the output image:DendritesSkeletonClean
    Select the color format:Binary (black & white)
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
MeasureObjectSkeleton:[module_num:29|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notes:['This measures the skeletal features (branches, endpoints, trunks) for the dendrites starting from the cell body.']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
    Select the seed objects:NucleiDendrites
    Select the skeletonized image:DendritesSkeletonClean
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ExpandOrShrinkObjects:[module_num:30|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notes:['Skeletonize the axons.']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
    Select the input objects:AxonsFiltered
    Name the output objects:AxonsSkeleton
    Select the operation:Skeletonize each object
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
ExpandOrShrinkObjects:[module_num:31|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notes:["Remove small protrusions which would be later recognized as branch points although they're not. The number of pixels by which to shrink needs to be determined empirically."]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
    Select the input objects:AxonsSkeleton
    Name the output objects:AxonsSkeletonClean
    Select the operation:Remove spurs
    Number of pixels by which to expand or shrink:2
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
ConvertObjectsToImage:[module_num:32|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notes:['The next modules are necessary so that the individual object identities (from the axons) are used for measuring the skeleton attributes.', 'The identified axons are converted to an image.']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
    Select the input objects:AxonsSkeletonClean
    Name the output image:AxonsSkeletonClean
    Select the color format:Binary (black & white)
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
MeasureObjectSkeleton:[module_num:33|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notes:['This measures the skeletal features (branches, endpoints, trunks) for the axons starting from the cell body.']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
    Select the seed objects:NucleiAxons
    Select the skeletonized image:AxonsSkeletonClean
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSizeShape:[module_num:34|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notes:['Include this if you want to remeasure the size and shape features again for just the filtered dendrites and axons.']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
    Select object sets to measure:AxonsFiltered, DendritesFiltered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToDatabase:[module_num:35|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notes:["You can also select to export to excel sheets, however, that can't handle large data so I recommend to get used to the database export from the beginning on."]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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|Desktop\\current projects\\analysis_iN_5A24_dif64_screenMATRIX
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
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    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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