CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch3")
    Name to assign these images:SMI312
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei via Hoechst staining.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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
Threshold:[module_num:6|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notes:['Make SMI312 binary for masking the nuclei.']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
    Select the input image:SMI312
    Name the output image:BinarySMI312
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.5
    Lower and upper bounds on threshold:0.01,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

MaskObjects:[module_num:7|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notes:['Keep only the nuclei which overlap with some SMI312 staining to get only neuronal nuclei in case of a not pure neuronal culture.']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
    Select objects to be masked:Nucleus
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:BinarySMI312
    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.2
    Numbering of resulting objects:Renumber
    Invert the mask?:No

IdentifySecondaryObjects:[module_num:8|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notes:['Identify axons (+cell body) by using the SMI312 image around the already identified and masked nuclei.']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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:Axons_with_Nuclei
    Select the method to identify the secondary objects:Propagation
    Select the input image:SMI312
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.003,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:9|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notes:['Identify dendrites (+cell body) by using the MAP2 image around the already identified and masked nuclei.']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
    Select the input objects:MaskedNuclei
    Name the objects to be identified:Dendrites_with_Nuclei
    Select the method to identify the secondary objects:Propagation
    Select the input image:MAP2
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

IdentifyTertiaryObjects:[module_num:10|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notes:['Both SMI312 and MAP2 stain the cell body next to axons and dendrites, respectively. By removing the dendrites+cellbody (MAP2) from the axons+cellbody (SMI312) only the axons will remain.']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
    Select the larger identified objects:Axons_with_Nuclei
    Select the smaller identified objects:Dendrites_with_Nuclei
    Name the tertiary objects to be identified:Axons
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:11|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notes:['Both SMI312 and MAP2 stain the cell body next to axons and dendrites, respectively. By removing the axons+cellbody (SMI312) from the dendrites+cellbody (MAP2) only the dendrites will remain.']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
    Select the larger identified objects:Dendrites_with_Nuclei
    Select the smaller identified objects:Axons_with_Nuclei
    Name the tertiary objects to be identified:Dendrites
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:12|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notes:['Measure the size and shape of axons and dendrites.']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
    Select object sets to measure:Axons, Dendrites
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MaskObjects:[module_num:13|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notes:['Both SMI312 and MAP2 stain the cell body. By masking the SMI312 staining with the MAP2 staining the overlap is the cell body.']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
    Select objects to be masked:Axons_with_Nuclei
    Name the masked objects:CellBody
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Dendrites_with_Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ConvertObjectsToImage:[module_num:14|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notes:['The skeleton module needs a binary picture so here the identified axons are converted to binary image.']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
    Select the input objects:Axons
    Name the output image:AxonsBinary
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:15|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notes:['The skeleton module needs a binary picture so here the identified dendrites are converted to binary image.']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
    Select the input objects:Dendrites
    Name the output image:DendritesBinary
    Select the color format:Binary (black & white)
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
MeasureObjectSkeleton:[module_num:16|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notes:['This measures the skeletal features (branches, endpoints, trunks) for the axons starting from the cell body.']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
    Select the seed objects:CellBody
    Select the skeletonized image:AxonsBinary
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:EnhancedTuji1
    File output directory:Default Input Folder sub-folder|Desktop\Düsseldorf\CellProfiler\test images neurites
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSkeleton:[module_num:17|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notes:['This measures the skeletal features (branches, endpoints, trunks) for the dendrites starting from the cell body.']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
    Select the seed objects:CellBody
    Select the skeletonized image:DendritesBinary
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

ExportToSpreadsheet:[module_num:18|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notes:['Export data.', 'By enabling "calculate per image mean values" one gets the object counts, etc. per image.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\fibronectin
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:dif17
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:19|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|Desktop\\fibronectin
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:dfi17_normal.db-vs-erfle_bdnf
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Axons,CellBody,Dendrites,MaskedNuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:dif17_normal-vs-erfle_bdnf
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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